PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = replicate_nsd
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    ImageComponent image
      image [set every repeat] = $current_image
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
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    KeyboardComponent press_if_repeat
      allowedKeys = 'r'
      forceEndRoutine = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
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    CodeComponent code_2
      Code Type = Auto->JS
  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will view images. Your job will be to press the R key if you see an image that has repeated, otherwise do not press anything.

        To begin the experiment, press spacebar.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine set_up
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        participant_conditions_file = "conditions_files/participant" + expInfo["participant"] + "_.csv"
  Routine block
    RoutineSettingsComponent block
      skipIf = not_mod_20
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    CodeComponent code_3
      Code Type = Auto->JS
    CodeComponent set_up_block
      Code Type = Auto->JS
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      Begin Experiment:
        trial_counter_for_block = 0
        not_mod_20 = True
      Begin Routine:
        trial_counter_for_block += 1
        if trial_counter_for_block % 20 != 0:
            not_mod_20 = True
        else:
            not_mod_20 = False
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = please take break
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Flow
  Routine set_up
  Routine instructions
  LoopInitiator loop_all_images loopType="TrialHandler"
    conditionsFile = $participant_conditions_file
    loopType = sequential
    nReps = 1
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    Routine trial
    Routine block
  LoopTerminator loop_all_images
